PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'session': '001', 'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = event_span
  keyboardBackend = ioHub
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Routines
  Routine Welcome_Screen1
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    TextComponent welcome_text1
      letterHeight = 0.07
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!
    KeyboardComponent welcome_key1
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_text
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (Press SPACE to continue)
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        oddParticipant = 0
        evenParticipant = 0
        session_number = int(expInfo['session'])
        if session_number % 2 == 1:
            oddParticipant = 1
        else:
            evenParticipant = 1

        print(session_number)
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this study, we aim to understand how people perceive and recall specific day-hour combinations in two distinct calendar styles.
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  Routine Preparation_Phase1
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    TextComponent preparation_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = As previously mentioned, we will be using two different week layouts in this study. The first layout presents the days of the week in a linear format with all seven days in a row. The second layout splits the days into two columns and distributes the hours into three columns. You will be assigned to one of these layouts during the memory and recall phases.
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    KeyboardComponent preparation_key1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Preparation_Phase2
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        layouts = ["week_7.jpg", "week_3l4r.jpg"]
        shuffle(layouts)
        week_img = layouts[0]
    ImageComponent week
      image [set every frame] = $week_img
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent preparation_key2
      allowedKeys = 'space', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Preparation_Phase3
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    ImageComponent week_3l4r
      image = week_3l4r.jpg
      size = (1,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent preparation_key3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intermediary_task
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        task1 = "96 - 3 - 3 - 3 ..."
        task2 = "47 + 4 + 4 + 4 ..."
        task3 = "99 - 7 - 7 - 7 ..."
        task4 = "4 + 7 + 7 + 7 ..."
        tasks = [task1, task2, task3, task4]
        shuffle(tasks)
        task = tasks[0]
        tasks = tasks[1:]
    TextComponent task_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = $task
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    KeyboardComponent task_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = Do the intermidiary task until the time runs out:
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  Routine Recall_Phase
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    TextComponent recall_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
      text = Recall the date and time (e.g. mon-8, wed-13)
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    KeyboardComponent recall_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_Screen
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Congratulations, you have successfully completed all phases of the experiment! Thank you for participation.
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  Routine Preparation_Phase1_3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to display week layout. Familiarize yourself with it. Whenever you are ready press SPACE again to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Memorization_Phase2
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    ImageComponent image
      image = $week_img
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent memorization_key2
      allowedKeys = 'space', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Preperation_Phase2
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    ImageComponent image_3
      image = week7/week7_empty.jpg
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    KeyboardComponent preparation_key
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine newRoutine
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    ImageComponent image_2
      image [set every repeat] = $imageName
      pos [set every repeat] = pos
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key_week7
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent recallText
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Recall the date and time by typing first three letters of the week followed by time (e.g. mon 8, tue 11, wed 9, thu 19, fri 15, sat 18, sun 14):
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent endButton
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        feedback_message = imageName
        print(feedback_message)
    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine validation
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        response = textbox.text

        time_correct = 2
        time_incorrect = 1.9
        duration = time_correct

        response = response.rstrip('\n')
        response = response.lower()

        if len(response) >= 3 and response[:3] == "fry":
            response = "fri" + response[3:]
        if len(response) >= 3 and response[:3] == "wen":
            response = "wed" + response[3:]
        if len(response) >= 3 and response[:3] == "thr":
            response = "thu" + response[3:]
        if len(response) >= 2 and response[-1] == '8' and response[-2] != '0' and response[-2] != '1':
            response = response[:-1] + '08'
        if len(response) >= 2 and response[-1] == '9' and response[-2] != '0' and response[-2] != '1':
            response = response[:-1] + '09'

        if len(response) >= 4 and response[3] == ' ':
                response = response[:3] + '-' + response[4:]
        elif len(response) > 3 and response[3] != '-':
            response = response[:3] + '-' + response[3:]

        correctAns = imageName[13:19]
        if(correctAns == response):
            feedbackMessage = "Correct"
            duration = time_correct
        else:
            feedbackMessage = "Incorrect"
            duration = time_incorrect

        print("correct ans", correctAns)
        print("response", response)
        print("feedback", feedbackMessage)
  Routine stimuliLoader
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        imageList = []
        correctAnswers = []
      Begin Routine:
        imageList.append(imageName)
        correctAnswers.append(correctAns)
  Routine displayAnswer
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  Routine testRoutine
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedbackMessage
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    KeyboardComponent key_resp_3
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation_phase2
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    TextComponent preparation_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to display week layout. Familiarize yourself with it. Whenever you are ready press SPACE again to continue.
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    KeyboardComponent key_resp_7
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation_phase2_2
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    ImageComponent image_4
      image = weekD/week-D_empty.jpg
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1
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  Routine recall2
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    TextComponent recall_text_2
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Recall the date and time by typing first three letters of the week followed by time (e.g. mon 8, tue 11, wed 9, thu 19, fri 15, sat 18, sun 14):
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    TextboxComponent input_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent end_button_2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        feedback_message = imageName
        print(feedback_message)
    KeyboardComponent key_resp_9
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_display2
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    ImageComponent image_weekD
      image [set every repeat] = $imageName
      pos [set every repeat] = pos
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent response_key_weekD
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine validation_2
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    CodeComponent code2_2
      Code Type = Auto->JS
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      Begin Routine:
        response = input_2.text

        time_correct = 2
        time_incorrect = 1.9
        duration = time_correct

        response = response.rstrip('\n')
        response = response.lower()

        if len(response) >= 3 and response[:3] == "fry":
            response = "fri" + response[3:]
        if len(response) >= 3 and response[:3] == "wen":
            response = "wed" + response[3:]
        if len(response) >= 3 and response[:3] == "thr":
            response = "thu" + response[3:]
        if len(response) >= 2 and response[-1] == '8' and response[-2] != '0' and response[-2] != '1':
            response = response[:-1] + '08'
        if len(response) >= 2 and response[-1] == '9' and response[-2] != '0' and response[-2] != '1':
            response = response[:-1] + '09'

        if len(response) >= 4 and response[3] == ' ':
                response = response[:3] + '-' + response[4:]
        elif len(response) > 3 and response[3] != '-':
            response = response[:3] + '-' + response[3:]

        correctAns = imageName[13:19]
        if(correctAns == response):
            feedbackMessage = "Correct"
            duration = time_correct
        else:
            feedbackMessage = "Incorrect"
            duration = time_incorrect
        print(feedbackMessage)
  Routine test
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    ImageComponent image_5
      image = week7/week7_empty.jpg
      pos = (-0.15, 0)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine random_position
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    CodeComponent rand_pos
      Code Type = Auto->JS
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      Begin Experiment:
        pos = (0, 0)
      Each Frame:
        import random

        random_number = random.randint(0, 2)
        print("random number = ", random_number)

        if(random_number == 1):
            pos = (-.15, 0)
        elif(random_number == 2):
            pos = (.15,0)
        else:
            pos = (0,0)
  Routine Welcome_Screen2
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    TextComponent text_desc
      letterHeight = 0.05
      pos = (0, .18)
      startVal [time (s)] = 0.0
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      text:
        You will be presented with cells highlighting specific day-hour combinations.
        Your task will involve recalling the highlighted information by typing the day and time. The experiment is devided into two segments. Each segment contains two parts.
    KeyboardComponent key_resp_10
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_text_2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (Press SPACE to continue)
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    TextComponent tasks_text
      letterHeight = 0.07
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Task Details:
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    TextComponent why_participate_text
      letterHeight = 0.07
      pos = (0, -.15)
      startVal [time (s)] = 0.0
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      text:
        Why Participate?
    TextComponent participate_desc
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = Your participation will contribute valuable insights to our research on calendar perception.
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  Routine Welcome_Screen3
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    TextComponent privacy_text
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
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      text:
        Your Privacy Matters:
        Your responses will remain anonymous.

        Your Rights:
        You have the right to stop participating at any time without consequences.

        Consent:
        By completing the questionnaire, you provide consent to participate.
        Thank you for contributing to our research on calendar perception! If you have any questions, please contact us at juhanjoh@ut.ee, luka.namoradze@ut.ee
    KeyboardComponent key_resp_11
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_text_3
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (Press SPACE to continue)
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  Routine Gender
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    TextComponent gender_title
      letterHeight = 0.07
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Gender
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    TextComponent text_gender
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press:
        M - for male
        F - for female
        O - for other or I leave unanswered
    KeyboardComponent key_gender
      allowedKeys = 'm', 'f', 'o'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Age
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    TextComponent age_title
      letterHeight = 0.07
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Age:
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    TextboxComponent age_input
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent endButton_2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Press ENTER to submit
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  Routine blank500
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine preparation_phase4
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    TextComponent note_text
      letterHeight = 0.07
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Note:
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    TextComponent note_desc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = After you view highlighted cell and make sure you memorised day and time press SPACE as quickly as possible
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    KeyboardComponent key_resp_13
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_text_4
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = (Press SPACE to continue)
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  Routine preparation_phase3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to start the first segment of the experiment. Memorize the precise day of the week and time for the highlighted area on the week layout. Press SPACE again to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine preparation_phase3_2
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    TextComponent memorization_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE to start the second segment of the experiment. Memorize the precise day of the week and time for the highlighted area on the week layout. Press SPACE again to continue.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space', 'right', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent break_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 30 second break
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    TextComponent skip_break
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = (If You Wish to Skip Break Press SPACE to continue)
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  Routine split1
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The first part of the first segment is over. Press SPACE to start the second part of the segment.
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    KeyboardComponent key_resp_15
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine split2
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The first segement is over. Press SPACE to start the second segment.
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    KeyboardComponent key_resp_16
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine split2_1
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  Routine split3
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    TextComponent split3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The first part of the second segment is over. Press SPACE to start the second part of the segment.
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    KeyboardComponent key_resp_17
      allowedKeys = 'right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_Screen1
  Routine Welcome_Screen2
  Routine Welcome_Screen3
  Routine Gender
  Routine blank500
  Routine Age
  LoopInitiator trials_odd loopType="TrialHandler"
    loopType = random
    nReps = oddParticipant
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    Routine Preparation_Phase1_3
    Routine Preperation_Phase2
    Routine preparation_phase3
    Routine preparation_phase4
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = filtered_stimuli_week7.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'imageName': 'week7/week-7_mon-08.jpg'},
        {'imageName': 'week7/week-7_mon-12.jpg'},
        {'imageName': 'week7/week-7_mon-13.jpg'},
        {'imageName': 'week7/week-7_mon-14.jpg'},
        {'imageName': 'week7/week-7_mon-16.jpg'},
        {'imageName': 'week7/week-7_mon-18.jpg'},
        {'imageName': 'week7/week-7_mon-20.jpg'},
        {'imageName': 'week7/week-7_tue-08.jpg'},
        {'imageName': 'week7/week-7_tue-09.jpg'},
        {'imageName': 'week7/week-7_tue-12.jpg'},
        {'imageName': 'week7/week-7_tue-15.jpg'},
        {'imageName': 'week7/week-7_tue-17.jpg'},
        {'imageName': 'week7/week-7_tue-18.jpg'},
        {'imageName': 'week7/week-7_tue-20.jpg'},
        {'imageName': 'week7/week-7_wed-08.jpg'},
        {'imageName': 'week7/week-7_wed-09.jpg'},
        {'imageName': 'week7/week-7_wed-10.jpg'},
        {'imageName': 'week7/week-7_wed-12.jpg'},
        {'imageName': 'week7/week-7_wed-13.jpg'},
        {'imageName': 'week7/week-7_wed-18.jpg'},
        {'imageName': 'week7/week-7_wed-20.jpg'},
        {'imageName': 'week7/week-7_thu-08.jpg'},
        {'imageName': 'week7/week-7_thu-10.jpg'},
        {'imageName': 'week7/week-7_thu-12.jpg'},
        {'imageName': 'week7/week-7_thu-13.jpg'},
        {'imageName': 'week7/week-7_thu-18.jpg'},
        {'imageName': 'week7/week-7_thu-19.jpg'},
        {'imageName': 'week7/week-7_thu-20.jpg'},
        {'imageName': 'week7/week-7_fri-08.jpg'},
        {'imageName': 'week7/week-7_fri-10.jpg'},
        {'imageName': 'week7/week-7_fri-12.jpg'},
        {'imageName': 'week7/week-7_fri-16.jpg'},
        {'imageName': 'week7/week-7_fri-18.jpg'},
        {'imageName': 'week7/week-7_fri-19.jpg'},
        {'imageName': 'week7/week-7_fri-20.jpg'},
        {'imageName': 'week7/week-7_sat-08.jpg'},
        {'imageName': 'week7/week-7_sat-10.jpg'}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
      Routine random_position
      Routine newRoutine
      Routine trial
      Routine validation
    LoopTerminator trials
    Routine break_2
    Routine split1
    LoopInitiator trials2 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_week7.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine random_position
      Routine newRoutine
      Routine trial
      Routine validation
    LoopTerminator trials2
    Routine break_2
    Routine split2
    Routine preparation_phase2
    Routine preparation_phase2_2
    Routine preparation_phase3_2
    Routine preparation_phase4
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_weekD.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'imageName': 'weekD/week-D_mon-08.jpg'},
        {'imageName': 'weekD/week-D_mon-09.jpg'},
        {'imageName': 'weekD/week-D_mon-12.jpg'},
        {'imageName': 'weekD/week-D_mon-14.jpg'},
        {'imageName': 'weekD/week-D_mon-15.jpg'},
        {'imageName': 'weekD/week-D_mon-18.jpg'},
        {'imageName': 'weekD/week-D_mon-20.jpg'},
        {'imageName': 'weekD/week-D_tue-08.jpg'},
        {'imageName': 'weekD/week-D_tue-12.jpg'},
        {'imageName': 'weekD/week-D_tue-13.jpg'},
        {'imageName': 'weekD/week-D_tue-14.jpg'},
        {'imageName': 'weekD/week-D_tue-16.jpg'},
        {'imageName': 'weekD/week-D_tue-18.jpg'},
        {'imageName': 'weekD/week-D_tue-20.jpg'},
        {'imageName': 'weekD/week-D_wed-08.jpg'},
        {'imageName': 'weekD/week-D_wed-10.jpg'},
        {'imageName': 'weekD/week-D_wed-12.jpg'},
        {'imageName': 'weekD/week-D_wed-13.jpg'},
        {'imageName': 'weekD/week-D_wed-15.jpg'},
        {'imageName': 'weekD/week-D_wed-18.jpg'},
        {'imageName': 'weekD/week-D_wed-20.jpg'},
        {'imageName': 'weekD/week-D_thu-08.jpg'},
        {'imageName': 'weekD/week-D_thu-12.jpg'},
        {'imageName': 'weekD/week-D_thu-13.jpg'},
        {'imageName': 'weekD/week-D_thu-15.jpg'},
        {'imageName': 'weekD/week-D_thu-18.jpg'},
        {'imageName': 'weekD/week-D_thu-19.jpg'},
        {'imageName': 'weekD/week-D_thu-20.jpg'},
        {'imageName': 'weekD/week-D_fri-08.jpg'},
        {'imageName': 'weekD/week-D_fri-09.jpg'},
        {'imageName': 'weekD/week-D_fri-10.jpg'},
        {'imageName': 'weekD/week-D_fri-11.jpg'},
        {'imageName': 'weekD/week-D_fri-12.jpg'},
        {'imageName': 'weekD/week-D_fri-18.jpg'},
        {'imageName': 'weekD/week-D_fri-20.jpg'},
        {'imageName': 'weekD/week-D_sat-08.jpg'},
        {'imageName': 'weekD/week-D_sat-10.jpg'}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
      Routine random_position
      Routine image_display2
      Routine recall2
      Routine validation_2
    LoopTerminator trials_2
    Routine break_2
    Routine split3
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_weekD.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine random_position
      Routine image_display2
      Routine recall2
      Routine validation_2
    LoopTerminator trials_4
  LoopTerminator trials_odd
  LoopInitiator trials_even loopType="TrialHandler"
    loopType = random
    nReps = evenParticipant
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    Routine preparation_phase2
    Routine preparation_phase2_2
    Routine preparation_phase3
    Routine preparation_phase4
    LoopInitiator trials2_2 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_weekD.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine image_display2
      Routine recall2
      Routine validation_2
    LoopTerminator trials2_2
    Routine break_2
    Routine split1
    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_weekD.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine image_display2
      Routine recall2
      Routine validation_2
    LoopTerminator trials_5
    Routine break_2
    Routine split2
    Routine Preparation_Phase1_3
    Routine Preperation_Phase2
    Routine preparation_phase3_2
    Routine preparation_phase4
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_week7.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine newRoutine
      Routine trial
      Routine validation
    LoopTerminator trials_3
    Routine break_2
    Routine split3
    LoopInitiator trials_6 loopType="TrialHandler"
      conditionsFile = filtered_stimuli_week7.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine newRoutine
      Routine trial
      Routine validation
    LoopTerminator trials_6
  LoopTerminator trials_even
  Routine End_Screen
